PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [640, 480]
  expName = ReadingTask01
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        Sentence=[]
        if thisTrial != None:
            for paramName in thisTrial:
                Sentence.append(thisTrial[paramName])
        if Sentence[nSentence]=='z':
            continueRoutine=False
      Each Frame:
        if expwords>0 and trialwords>0: #
            if mySound.status == NOT_STARTED:
                mySound = sound.Sound(value=folder_path+words[word][syllable], volume=volumeWords) #play the first Syllable
                mySound.play()
            if syllable ==2: #a word was played
                word+=1
                syllable=-1
                trialwords-=1
                if word==4: # each word is repeated one time
                    random.shuffle(words)
                    while latestWord==words[0] or lastWord==words[0] or latestWord==words[1]: # first word of the shuffled list must not be the same to the latest and the previous to the latest
                        random.shuffle(words)
                    lastWord=words[2] #reasign the previous to latest word
                    latestWord=words[3] #reasign the latest word
                    word=0 #reset the word counter
                    expwords-=1
            if mySound.status == FINISHED:    #play each syllable
                if trialwords<2: #the last 2 words of each trial
                    volumeWords/=2 #decreases the volume by half in each syllable
                if trialwords>32: #the first 2 words of each trial
                    volumeWords*=2 #increases the volume of each syllable by duplicating it
                syllable+=1     # next syllable
                mySound = sound.Sound(value=folder_path+words[word][syllable], volume=volumeWords) #load the audio file
                mySound.play()
        else:
            continueRoutine=False
            trials.finished=True
            trials_2.finished=True
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Sentence[nSentence]
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  Routine Trial1
    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import sound
        from numpy import random
        import numpy as np
        import math
      Begin Experiment:
        folder_path = os.getcwd()+"/" # extract the users directory
        pautone = ["syllables/pau.wav","syllables/to.wav","syllables/ne.wav"] #define pautone as a list of soundfiles
        gamilu =["syllables/ga.wav","syllables/mi.wav","syllables/lu.wav"] #define gamilu as a list of soundfiles
        nurafi=["syllables/nu.wav","syllables/ra.wav","syllables/fi.wav"] #define nurafi as a list of soundfiles
        maipuki=["syllables/mai.wav","syllables/pu.wav","syllables/ki.wav"] #define maupuki as a list of soundfiles
        words=[pautone,gamilu,nurafi,maipuki] #list of words
        random.shuffle(words)  #change the order of words
        lastWord=words[2] # initialize the last word played before the latest
        latestWord=words[3] # initialize the latest word.
        word=0  #auxiliary variable to keep track of the words in the list
        syllable=0 # auxiliary variable to keep track of the syllables of each word
        trialwords=34  # amount of words per trial defined by the time duration of the circles moving
        expwords=trialwords*12/4 # amount of times each different word repeats itself
        volumeWords=0.015625 #set the volume
        mySound = sound.Sound(folder_path+words[word][syllable]) #loading the first syllable of the first word of the words list shuffled
        nList=[]
      Begin Routine:
        nSentence=int(N)
        nList.append(nSentence)
  Routine intro
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will be reading a series of sentences and at the same time you will hear nonsense sounds. Please ignore these sounds and only focus on reading the sentences. To move on to the next word, you will need to press the SPACEBAR. Please try to read as quickly as possible, while paying attention to the sentences. At the end of each trial you will answer comprehension questions about what you read.
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine question
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = question about sentence
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Question1
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        syllable=-1 #resets syllable order
        trialwords=34 # resets amount of words per trial
        volumeWords=0.015625 #resets the volume
        qTextIndex=random.choice(nList)
        nList.remove(qTextIndex)
        qText=trials_2.trialList[qTextIndex].get('Questions')
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $qText +"?/n"+" press space before your answer and enter after"
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    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Question2
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        qTextIndex=random.choice(nList)
        qText=trials_2.trialList[qTextIndex].get('Questions')
      End Routine:
        nList=[]
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $qText +"?/n press space before your answer and enter after"
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Answer2
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        textFill2 = ' '
      Each Frame:
        letterAns = event.getKeys()
        if 'escape' in letterAns:
            core.quit()  # So you can quit
        else:
            if letterAns:
                if letterAns[0] == 'space':
                    textFill2 += ' '  # Adds a space instead of 'space'
                elif letterAns[0] == 'backspace':
                    textFill2 = textFill2[:-1]  # Deletes
                elif letterAns[0]=='return':
                    continueRoutine=False

                elif letterAns[0] in allLetters:
                    textFill2+=letterAns[0]  # Adds character to text if in alphabet.
                copyText2.setText(textFill2)  # Set new text on screen
    TextComponent copyText2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys [set every repeat] = None
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Answer1
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase)
      Begin Routine:
        textFill1 = ' '
      Each Frame:
        letterAns = event.getKeys()
        if 'escape' in letterAns:
            core.quit()  # So you can quit
        else:
            if letterAns:
                if letterAns[0] == 'space':
                    textFill1 += ' '  # Adds a space instead of 'space'
                elif letterAns[0] == 'backspace':
                    textFill1 = textFill1[:-1]  # Deletes
                elif letterAns[0]=='return':
                    continueRoutine=False

                elif letterAns[0] in allLetters:
                    textFill1+=letterAns[0]  # Adds character to text if in alphabet.
                copyText.setText(textFill1)  # Set new text on screen
    TextComponent copyText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = None
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent key_resp_9
      allowedKeys [set every repeat] = 'return',
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine intro
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 12
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    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = N.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('N', 0)]),
        OrderedDict([('N', 1)]),
        OrderedDict([('N', 2)]),
        OrderedDict([('N', 3)]),
        OrderedDict([('N', 4)]),
        OrderedDict([('N', 5)]),
        OrderedDict([('N', 6)]),
        OrderedDict([('N', 7)]),
        OrderedDict([('N', 8)]),
        OrderedDict([('N', 9)]),
        OrderedDict([('N', 10)]),
        OrderedDict([('N', 11)]),
        OrderedDict([('N', 12)]),
        OrderedDict([('N', 13)]),
        OrderedDict([('N', 14)]),
        OrderedDict([('N', 15)]),
        OrderedDict([('N', 16)]),
        OrderedDict([('N', 17)]),
        OrderedDict([('N', 18)]),
        OrderedDict([('N', 19)])]
      Routine Trial1
      LoopInitiator trials loopType="TrialHandler"
        Selected rows = 0:11
        conditionsFile = SentenceList.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('S1', 'The'), ('S2', 'Glue'), ('S3', "It's"), ('S4', 'These'), ('S5', 'Rice'), ('S6', 'The'), ('S7', 'The'), ('S8', 'The'), ('S9', 'Four'), ('S10', 'A'), ('S11', 'The'), ('S12', 'A'), ('S13', 'The'), ('S14', 'Kick'), ('S15', 'Help'), ('S16', 'A'), ('S17', 'Smoky'), ('S18', 'The'), ('S19', 'The'), ('S20', 'The')]),
          OrderedDict([('S1', 'bird'), ('S2', 'the'), ('S3', 'easy'), ('S4', 'days'), ('S5', 'is'), ('S6', 'juice'), ('S7', 'box'), ('S8', 'hogs'), ('S9', 'hours'), ('S10', 'large'), ('S11', 'boy'), ('S12', 'rod'), ('S13', 'source'), ('S14', 'the'), ('S15', 'the'), ('S16', 'pot'), ('S17', 'fires'), ('S18', 'soft'), ('S19', 'salt'), ('S20', 'girl')]),
          OrderedDict([('S1', 'canoe'), ('S2', 'sheet'), ('S3', 'to'), ('S4', 'a'), ('S5', 'often'), ('S6', 'of'), ('S7', 'was'), ('S8', 'were'), ('S9', 'of'), ('S10', 'size'), ('S11', 'was'), ('S12', 'is'), ('S13', 'of'), ('S14', 'ball'), ('S15', 'woman'), ('S16', 'of'), ('S17', 'lack'), ('S18', 'cushion'), ('S19', 'breeze'), ('S20', 'at')]),
          OrderedDict([('S1', 'slid'), ('S2', 'to'), ('S3', 'tell'), ('S4', 'chicken'), ('S5', 'served'), ('S6', 'lemons'), ('S7', 'thrown'), ('S8', 'fed'), ('S9', 'steady'), ('S10', 'in'), ('S11', 'there'), ('S12', 'used'), ('S13', 'the'), ('S14', 'straight'), ('S15', 'get'), ('S16', 'tea'), ('S17', 'flame'), ('S18', 'broke'), ('S19', 'came'), ('S20', 'the')])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
        Routine trial
      LoopTerminator trials
    LoopTerminator trials_2
    Routine Question1
    Routine Answer1
    Routine Question2
    Routine Answer2
  LoopTerminator trials_3
